PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = freeAssociationTask
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Routines
  Routine trial
    KeyboardComponent key_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = all keys
      syncScreenRefresh = False
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    TextComponent Words
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = Word
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Any text

        including line breaks
Flow
  Routine trial
