PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trial
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = white
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $sentence
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    KeyboardComponent response
      allowedKeys = 'f', 'v'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
      store = first key
      storeCorrect = True
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  Routine instruction
    TextComponent intrText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Elige "v" o "f".

        ahora pulsa cualquier tecla para continuar
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:10
    conditionsFile = Sentences4Verification.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sentence', 'un loro es un loro'), ('type', 'S0'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un canario es un canario'), ('type', 'S0'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un salmon es un salmon'), ('type', 'S0'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un bacalao es un bacalao'), ('type', 'S0'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un labrador es un labrador'), ('type', 'S0'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un dalmata es un dalmata'), ('type', 'S0'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un loro puede hablar'), ('type', 'P0'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un dalmata tiene manchas'), ('type', 'P0'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un canario puede cantar'), ('type', 'P0'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un loro es un pajaro'), ('type', 'S1'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un canario es un pajaro'), ('type', 'S1'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un salmon es un pez'), ('type', 'S1'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un bacalo es un pez'), ('type', 'S1'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un labrador es un perro'), ('type', 'S1'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un dalmata es un perro'), ('type', 'S1'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un loro tiene pulmones'), ('type', 'P1'), ('corrAns', 'T')]),
      OrderedDict([('sentence', 'un loro puede volar'), ('type', 'P1'), ('corrAns', 'T')])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
    Routine trial
  LoopTerminator trials
